PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = STROOP
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Routines
  Routine trial
    ImageComponent image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    Routine trial
  LoopTerminator trials
